WorkflowBuilder(Version=2.8.1)
GroupWorkflow Utils
    GroupWorkflow UpdateSubjects
        GroupWorkflow TrialBeginning
            GroupWorkflow ResetSubjects
                SubscribeSubject NewTrialRequest
                -> DoubleProperty(Value=NaN)
                -> MulticastSubject LEDStart
                -> MulticastSubject ResponsePoke
                -> WorkflowOutput

            GroupWorkflow LevelDependantSettings
                SubscribeSubject NewTrialRequest
                -> GroupWorkflow UpdateTrialNumber
                    WorkflowInput Source1 => #0
                    SubscribeSubject Trial => #1
                    #0, #1 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> Add(Operand=IntProperty(Value=1))
                    -> MulticastSubject Trial
                    -> WorkflowOutput
                -> GroupWorkflow TrialSoundCharacteristics
                    WorkflowInput Source1
                    -> GroupWorkflow ILD
                        WorkflowInput Source1 => #0
                        SubscribeSubject Random
                        -> Bonsai.Numerics.Distributions.CreateDiscreteUniform(Lower=0, Upper=1) => #2
                        #0, #2 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2)
                        -> Bonsai.Numerics.Distributions.Sample => #5
                        -> Condition
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(Value(DisplayName=Equal)) => #1
                            #0, #1 -> Equal(Operand=IntProperty(Value=0))
                            -> WorkflowOutput
                        -> IntProperty(Value=-1) => #7
                        #5 -> Condition => #8
                            WorkflowInput Source1 => #0
                            ExternalizedMapping(Value(DisplayName=Equal)) => #1
                            #0, #1 -> Equal(Operand=IntProperty(Value=1))
                            -> WorkflowOutput
                        #7, #8 -> Merge
                        -> MulticastSubject LeftOrRight => #10
                        SubscribeSubject ABL => #11
                        #10, #11 -> WithLatestFrom
                        -> Multiply
                        -> MulticastSubject ILD
                        -> WorkflowOutput
                    -> GroupWorkflow IntensityCalculation
                        WorkflowInput Source1 => #0
                        SubscribeSubject ABL
                        -> Divide(Operand=DoubleProperty(Value=2)) => #2
                        #0, #2 -> WithLatestFrom => #3
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: Item2 + (Item1 / 2)
                        -> MulticastSubject RightIntensity => #5
                        #3 -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: Item2 - (Item1 / 2)
                        -> MulticastSubject LeftIntensity => #7
                        #5, #7 -> Zip
                        -> WorkflowOutput
                    -> IncludeWorkflow(Path=Extensions\PrintRequest.bonsai, PrintCode=correct_side, PrintSubjectName=PrintCode)
                    -> WorkflowOutput
                -> WorkflowOutput

        GroupWorkflow Outcome
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == 2
            -> GroupWorkflow ParseOutcome => #2
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=AbortType)) => #1
                #0, #1 -> IntProperty(Value=0) => #2
                ExternalizedMapping(Value(DisplayName=Success)) => #3
                #0, #3 -> IntProperty(Value=1) => #4
                #2, #4 -> Zip
                -> WorkflowOutput
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == 1
            -> GroupWorkflow ParseOutcome => #5
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=AbortType)) => #1
                #0, #1 -> IntProperty(Value=0) => #2
                ExternalizedMapping(Value(DisplayName=Success)) => #3
                #0, #3 -> IntProperty(Value=-1) => #4
                #2, #4 -> Zip
                -> WorkflowOutput
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -1
            -> GroupWorkflow ParseOutcome => #8
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=AbortType)) => #1
                #0, #1 -> IntProperty(Value=1) => #2
                ExternalizedMapping(Value(DisplayName=Success)) => #3
                #0, #3 -> IntProperty(Value=0) => #4
                #2, #4 -> Zip
                -> WorkflowOutput
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -2
            -> GroupWorkflow ParseOutcome => #11
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=AbortType)) => #1
                #0, #1 -> IntProperty(Value=2) => #2
                ExternalizedMapping(Value(DisplayName=Success)) => #3
                #0, #3 -> IntProperty(Value=0) => #4
                #2, #4 -> Zip
                -> WorkflowOutput
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -3
            -> GroupWorkflow ParseOutcome => #14
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=AbortType)) => #1
                #0, #1 -> IntProperty(Value=3) => #2
                ExternalizedMapping(Value(DisplayName=Success)) => #3
                #0, #3 -> IntProperty(Value=0) => #4
                #2, #4 -> Zip
                -> WorkflowOutput
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -4
            -> GroupWorkflow ParseOutcome => #17
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=AbortType)) => #1
                #0, #1 -> IntProperty(Value=4) => #2
                ExternalizedMapping(Value(DisplayName=Success)) => #3
                #0, #3 -> IntProperty(Value=0) => #4
                #2, #4 -> Zip
                -> WorkflowOutput
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -5
            -> GroupWorkflow ParseOutcome => #20
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=AbortType)) => #1
                #0, #1 -> IntProperty(Value=5) => #2
                ExternalizedMapping(Value(DisplayName=Success)) => #3
                #0, #3 -> IntProperty(Value=0) => #4
                #2, #4 -> Zip
                -> WorkflowOutput
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -6
            -> GroupWorkflow ParseOutcome => #23
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=AbortType)) => #1
                #0, #1 -> IntProperty(Value=6) => #2
                ExternalizedMapping(Value(DisplayName=Success)) => #3
                #0, #3 -> IntProperty(Value=0) => #4
                #2, #4 -> Zip
                -> WorkflowOutput
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -7
            -> GroupWorkflow ParseOutcome => #26
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=AbortType)) => #1
                #0, #1 -> IntProperty(Value=7) => #2
                ExternalizedMapping(Value(DisplayName=Success)) => #3
                #0, #3 -> IntProperty(Value=0) => #4
                #2, #4 -> Zip
                -> WorkflowOutput
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -8
            -> GroupWorkflow ParseOutcome => #29
                WorkflowInput Source1 => #0
                ExternalizedMapping(Value(DisplayName=AbortType)) => #1
                #0, #1 -> IntProperty(Value=8) => #2
                ExternalizedMapping(Value(DisplayName=Success)) => #3
                #0, #3 -> IntProperty(Value=0) => #4
                #2, #4 -> Zip
                -> WorkflowOutput
            #2, #5, #8, #11, #14, #17, #20, #23, #26, #29 -> Merge
            -> MulticastSubject ParsedOutcome
            -> WorkflowOutput

    GroupWorkflow PlaySound
        SubscribeSubject StartSound
        -> Skip(Count=1)
        -> SelectMany
            SubscribeSubject StopSound
            -> Skip(Count=1)
            -> Take(Count=1)
            -> WorkflowOutput

            Timer(DueTime=PT0S, Period=PT9.5S)
            -> MulticastSubject PlaySound
        -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreatePlaySoundOrFrequencyPayload(PlaySoundOrFrequency=31))
        -> MulticastSubject SoundCardCommands

    GroupWorkflow WaterDelivery
        GroupWorkflow RewardButtonsLogic
            SubscribeSubject RewardLeftButton
            -> IntProperty(Value=-1) => #1
            SubscribeSubject RewardRightButton
            -> IntProperty(Value=1) => #3
            #1, #3 -> Merge
            -> MulticastSubject WaterDelivery
            -> WorkflowOutput

        SubscribeSubject WaterDelivery => #1
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: it == -1
        -> Condition
            SubscribeSubject SetupConfig
            -> MemberSelector(Selector=SyringePumps.UsePumps)
            -> WorkflowOutput
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableMotorDriverPayload(EnableMotorDriver=Enabled))
        -> MulticastSubject LeftPumpCommands
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableProtocolPayload(EnableProtocol=Enabled))
        -> MulticastSubject LeftPumpCommands
        -> IncludeWorkflow(Path=Extensions\PrintRequest.bonsai, PrintCode=reward_delivery, PrintSubjectName=PrintCode) => #8
        SubscribeSubject LeftRewardSteps => #9
        #8, #9 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform FromMillisecondsToTimeSpan
          Expression: TimeSpan.FromMilliseconds(it + 100)
        -> InputMapping(Selector=it, DueTime(Selector=it))
        -> SelectMany "Delay (DuckTapeSolution)"
            WorkflowInput Source1 => #0
            ExternalizedMapping(DueTime) => #1
            #0, #1 -> Delay(DueTime=PT0.009S)
            -> Take(Count=1)
            -> WorkflowOutput
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableMotorDriverPayload(EnableMotorDriver=Disabled))
        -> MulticastSubject LeftPumpCommands => #16
        #1 -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: it == 1
        -> Condition
            SubscribeSubject SetupConfig
            -> MemberSelector(Selector=SyringePumps.UsePumps)
            -> WorkflowOutput
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableMotorDriverPayload(EnableMotorDriver=Enabled))
        -> MulticastSubject RightPumpCommands
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableProtocolPayload(EnableProtocol=Enabled))
        -> MulticastSubject RightPumpCommands
        -> IncludeWorkflow(Path=Extensions\PrintRequest.bonsai, PrintCode=reward_delivery, PrintSubjectName=PrintCode) => #23
        SubscribeSubject RightRewardSteps => #24
        #23, #24 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform FromMillisecondsToTimeSpan
          Expression: TimeSpan.FromMilliseconds(it + 100)
        -> InputMapping(Selector=it, DueTime(Selector=it)) => #28
        Source2=#28 -> SelectMany "Delay (DuckTapeSolution)"
            WorkflowInput Source1 => #0
            ExternalizedMapping(DueTime) => #1
            #0, #1 -> Delay(DueTime=PT0.009S)
            -> Take(Count=1)
            -> WorkflowOutput
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateEnableMotorDriverPayload(EnableMotorDriver=Disabled))
        -> MulticastSubject RightPumpCommands => #31
        #16, #31 -> Merge
        -> WorkflowOutput

GroupWorkflow Hardware
    GroupWorkflow Camera
        Bonsai.Spinnaker.SpinnakerCapture(Index=nil, ColorProcessing=Default)
        -> PublishSubject Camera => #1
        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=Camera.UseCamera)
        -> Bonsai.Scripting.Expressions.ExpressionCondition => #4
          Expression: it
        #1, #4 -> SubscribeWhen

    SubscribeSubject Config
    -> MemberSelector(Selector=Ports.Behavior)
    -> PropertyMapping(PortName)
    -> GroupWorkflow Behavior
        SubscribeSubject BehaviorCommands => #0
        ExternalizedMapping(PortName) => #1
        #0, #1 -> Harp.Behavior.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM87)
        -> PublishSubject BehaviorMessages => #3
        SubscribeSubject Config => #4
        #3, #4 -> SubscribeWhen

        SubscribeSubject BehaviorMessages => #6
        -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedAnalogData)
        -> MemberSelector(Selector=Seconds)
        -> PublishSubject Timestamp
        #6 -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedDigitalInputState) => #10
        -> GroupWorkflow FilterPokeEvents
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Value) => #1
            ExternalizedMapping(Value(DisplayName=Port)) => #2
            #1, #2 -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort0)) => #3
            -> Condition
                SubscribeSubject SetupConfig
                -> MemberSelector(Selector=LeftPoke.LowToHigh)
                -> WorkflowOutput
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #5
              Expression: Convert.ToBoolean(it)
            #3 -> Condition
                SubscribeSubject SetupConfig
                -> MemberSelector(Selector=LeftPoke.LowToHigh)
                -> Equal(Operand=BooleanProperty(Value=false))
                -> WorkflowOutput
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #7
              Expression: !Convert.ToBoolean(it)
            #5, #7 -> Merge => #8
            #0 -> MemberSelector(Selector=Seconds) => #9
            #8, #9 -> WithLatestFrom
            -> DistinctUntilChangedBy(KeySelector=Item1)
            -> Bonsai.Harp.CreateTimestamped
            -> WorkflowOutput
        -> MulticastSubject LeftPoke
        #10 -> GroupWorkflow FilterPokeEvents
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Value) => #1
            ExternalizedMapping(Value(DisplayName=Port)) => #2
            #1, #2 -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort1)) => #3
            -> Condition
                SubscribeSubject SetupConfig
                -> MemberSelector(Selector=CenterPoke.LowToHigh)
                -> WorkflowOutput
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #5
              Expression: Convert.ToBoolean(it)
            #3 -> Condition
                SubscribeSubject SetupConfig
                -> MemberSelector(Selector=CenterPoke.LowToHigh)
                -> Equal(Operand=BooleanProperty(Value=false))
                -> WorkflowOutput
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #7
              Expression: !Convert.ToBoolean(it)
            #5, #7 -> Merge => #8
            #0 -> MemberSelector(Selector=Seconds) => #9
            #8, #9 -> WithLatestFrom
            -> DistinctUntilChangedBy(KeySelector=Item1)
            -> Bonsai.Harp.CreateTimestamped
            -> WorkflowOutput
        -> MulticastSubject CenterPoke
        #10 -> GroupWorkflow FilterPokeEvents
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Value) => #1
            ExternalizedMapping(Value(DisplayName=Port)) => #2
            #1, #2 -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort2)) => #3
            -> Condition
                SubscribeSubject SetupConfig
                -> MemberSelector(Selector=RightPoke.LowToHigh)
                -> WorkflowOutput
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #5
              Expression: Convert.ToBoolean(it)
            #3 -> Condition
                SubscribeSubject SetupConfig
                -> MemberSelector(Selector=RightPoke.LowToHigh)
                -> Equal(Operand=BooleanProperty(Value=false))
                -> WorkflowOutput
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #7
              Expression: !Convert.ToBoolean(it)
            #5, #7 -> Merge => #8
            #0 -> MemberSelector(Selector=Seconds) => #9
            #8, #9 -> WithLatestFrom
            -> DistinctUntilChangedBy(KeySelector=Item1)
            -> Bonsai.Harp.CreateTimestamped
            -> WorkflowOutput
        -> MulticastSubject RightPoke
        #6 -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedPortDIOStateEvent) => #17
        -> GroupWorkflow FilterPokeEvents
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Value) => #1
            ExternalizedMapping(Value(DisplayName=Port)) => #2
            #1, #2 -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.PortDigitalIOS>(Value=DIO0))
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #4
              Expression: Convert.ToBoolean(it)
            #0 -> MemberSelector(Selector=Seconds) => #5
            #4, #5 -> WithLatestFrom
            -> DistinctUntilChangedBy(KeySelector=Item1)
            -> Bonsai.Harp.CreateTimestamped
            -> WorkflowOutput
        -> MulticastSubject LEDOnsetTrigger
        #17 -> GroupWorkflow FilterPokeEvents
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Value) => #1
            ExternalizedMapping(Value(DisplayName=Port)) => #2
            #1, #2 -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.PortDigitalIOS>(Value=DIO1))
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #4
              Expression: Convert.ToBoolean(it)
            #0 -> MemberSelector(Selector=Seconds) => #5
            #4, #5 -> WithLatestFrom
            -> DistinctUntilChangedBy(KeySelector=Item1)
            -> Bonsai.Harp.CreateTimestamped
            -> WorkflowOutput
        -> MulticastSubject SoundOnsetTrigger
        #17 -> GroupWorkflow FilterPokeEvents
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Value) => #1
            ExternalizedMapping(Value(DisplayName=Port)) => #2
            #1, #2 -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.PortDigitalIOS>(Value=DIO2))
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #4
              Expression: Convert.ToBoolean(it)
            #0 -> MemberSelector(Selector=Seconds) => #5
            #4, #5 -> WithLatestFrom
            -> DistinctUntilChangedBy(KeySelector=Item1)
            -> Bonsai.Harp.CreateTimestamped
            -> WorkflowOutput
        -> MulticastSubject LNPTrigger

        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateLed0CurrentPayload(Led0Current=10)) => #24
        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateLed1CurrentPayload(Led1Current=10)) => #25
        Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputPulseEnablePayload(OutputPulseEnable="DOPort0 DOPort1 DOPort2")) => #26
        SubscribeSubject IntendedOptoOnset
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: it > 0
        -> InputMapping(Selector=it, PulseDOPort0(Selector=it))
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseDOPort0Payload(PulseDOPort0=5)) => #30
        SubscribeSubject IntendedOptoOnset => #31
        SubscribeSubject IntendedSoundOnset => #32
        #31, #32 -> CombineLatest
        -> Add
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: it > 0
        -> InputMapping(Selector=it, PulseDOPort1(Selector=it))
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseDOPort1Payload(PulseDOPort1=10)) => #37
        SubscribeSubject IntendedLNP
        -> Multiply(Operand=DoubleProperty(Value=1000))
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: it > 0
        -> InputMapping(Selector=it, PulseDOPort2(Selector=it))
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseDOPort2Payload(PulseDOPort2=3000)) => #42
        Disable SubscribeSubject Outcome
        -> Disable Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: it != 2 && it != 0
        -> Disable Condition
            SubscribeSubject SetupConfig
            -> MemberSelector(Selector=Lights.PenaltyLight)
            -> WorkflowOutput
        -> Disable SelectMany => #46
            SubscribeSubject SetupConfig
            -> MemberSelector(Selector=Lights.BoxPeriod)
            -> Divide(Operand=DoubleProperty(Value=2))
            -> Bonsai.Scripting.Expressions.ExpressionTransform FromMillisecondsToTimeSpan
              Expression: TimeSpan.FromMilliseconds(it)
            -> PropertyMapping(Period)
            -> Timer(DueTime=PT0S, Period=PT0.5S) => #5
            SubscribeSubject ITIStart
            -> Skip(Count=1) => #7
            #5, #7 -> TakeUntil
            -> WorkflowOutput
        -> Disable Bonsai.Scripting.Expressions.ExpressionCondition => #47
          Expression: it % 2 == 0
        Disable SubscribeSubject ITIStart
        -> Disable Condition
            SubscribeSubject SetupConfig
            -> MemberSelector(Selector=Lights.ItiLight)
            -> WorkflowOutput
        -> Disable Delay(DueTime=PT0.2S)
        -> Disable Int64Property(Value=0) => #51
        #47, #51 -> Disable Merge
        -> Disable Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=Led0)) => #53
        SubscribeSubject StartFixation
        -> Condition
            SubscribeSubject SetupConfig
            -> MemberSelector(Selector=Lights.FixationLight)
            -> WorkflowOutput
        -> SelectMany => #56
            SubscribeSubject SetupConfig
            -> MemberSelector(Selector=Lights.PokePeriod)
            -> Divide(Operand=DoubleProperty(Value=2))
            -> Bonsai.Scripting.Expressions.ExpressionTransform FromMillisecondsToTimeSpan
              Expression: TimeSpan.FromMilliseconds(it)
            -> PropertyMapping(Period)
            -> Timer(DueTime=PT0S, Period=PT0.5S) => #5
            SubscribeSubject StartSound => #6
            SubscribeSubject Outcome => #7
            #6, #7 -> Merge
            -> Skip(Count=2) => #9
            #5, #9 -> TakeUntil
            -> WorkflowOutput
        -> Bonsai.Scripting.Expressions.ExpressionCondition => #57
          Expression: it % 2 == 0
        SubscribeSubject TrialStart
        -> Condition
            SubscribeSubject SetupConfig
            -> MemberSelector(Selector=Lights.PokeLight)
            -> WorkflowOutput
        -> Int64Property(Value=0) => #60
        #57, #60 -> Merge
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=Led1)) => #62
        #46 -> Disable Bonsai.Scripting.Expressions.ExpressionCondition => #63
          Expression: it % 2 != 0
        Disable SubscribeSubject TrialStart
        -> Disable Int64Property(Value=0) => #65
        Disable SubscribeSubject ITIStart
        -> Disable Delay(DueTime=PT0.1S)
        -> Disable Int64Property(Value=0) => #68
        #63, #65, #68 -> Disable Merge
        -> Disable Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=Led0)) => #70
        #56 -> Bonsai.Scripting.Expressions.ExpressionCondition => #71
          Expression: it % 2 != 0
        SubscribeSubject StartSound => #72
        SubscribeSubject Outcome => #73
        #72, #73 -> Merge
        -> Delay(DueTime=PT0.1S)
        -> Int64Property(Value=0) => #76
        #71, #76 -> Merge
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=Led1)) => #78
        #24, #25, #26, #30, #37, #42, #53, #62, #70, #78 -> Merge
        -> MulticastSubject BehaviorCommands => #80
        SubscribeSubject BehaviorMessages => #81
        #80, #81 -> SubscribeWhen

    SubscribeSubject Config
    -> MemberSelector(Selector=Ports.Soundcard)
    -> PropertyMapping(PortName)
    -> GroupWorkflow SoundCard
        SubscribeSubject SoundCardCommands => #0
        ExternalizedMapping(PortName) => #1
        #0, #1 -> Harp.SoundCard.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM17)
        -> PublishSubject SoundCardMessages => #3
        SubscribeSubject Config => #4
        #3, #4 -> SubscribeWhen

        SubscribeSubject PlaySound
        -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreatePlaySoundOrFrequencyPayload(PlaySoundOrFrequency=2)) => #7
        SubscribeSubject LeftIntensity => #8
        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=Speakers.LeftSlope) => #10
        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=Speakers.LeftIntercept) => #12
        #10, #12 -> Zip => #13
        #8, #13 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: - 20 * (Item1 - Item2.Item2) / Item2.Item1
        -> MulticastSubject LeftAmp
        -> Multiply(Operand=DoubleProperty(Value=10))
        -> InputMapping(Selector=it, AttenuationLeft(Selector=it))
        -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreateAttenuationLeftPayload(AttenuationLeft=178)) => #19
        SubscribeSubject RightIntensity => #20
        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=Speakers.RightSlope) => #22
        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=Speakers.RightIntercept) => #24
        #22, #24 -> Zip => #25
        #20, #25 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: - 20 * (Item1 - Item2.Item2) / Item2.Item1
        -> MulticastSubject RightAmp
        -> Multiply(Operand=DoubleProperty(Value=10))
        -> InputMapping(Selector=it, AttenuationRight(Selector=it))
        -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreateAttenuationRightPayload(AttenuationRight=577)) => #31
        #7, #19, #31 -> Merge
        -> MulticastSubject SoundCardCommands => #33
        SubscribeSubject SoundCardMessages => #34
        #33, #34 -> SubscribeWhen

    SubscribeSubject Config
    -> MemberSelector(Selector=Ports.LeftPump)
    -> PropertyMapping(PortName)
    -> GroupWorkflow LeftSyringePump
        SubscribeSubject LeftPumpCommands => #0
        ExternalizedMapping(PortName) => #1
        #0, #1 -> Harp.SyringePump.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM0)
        -> PublishSubject LeftPumpMessages => #3
        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=SyringePumps.UsePumps)
        -> Bonsai.Scripting.Expressions.ExpressionCondition => #6
          Expression: it
        SubscribeSubject Config => #7
        #6, #7 -> Zip => #8
        #3, #8 -> SubscribeWhen

        Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolDirectionPayload(ProtocolDirection=Forward)) => #10
        SubscribeSubject LeftReward => #11
        SubscribeSubject SetupConfig => #12
        -> MemberSelector(Selector=SyringePumps.LeftSlope) => #13
        #12 -> MemberSelector(Selector=SyringePumps.LeftIntercept) => #14
        #11, #13, #14 -> CombineLatest
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Convert.ToInt32((Item1 - Item3) / Item2)
        -> MulticastSubject LeftRewardSteps
        -> InputMapping(Selector=it, ProtocolStepCount(Selector=it))
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolStepCountPayload(ProtocolStepCount=75)) => #19
        Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolPeriodPayload(ProtocolPeriod=1)) => #20
        Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateStepModePayload(StepMode=Half)) => #21
        #10, #19, #20, #21 -> Merge
        -> MulticastSubject LeftPumpCommands => #23
        SubscribeSubject LeftPumpMessages => #24
        #23, #24 -> SubscribeWhen

    SubscribeSubject Config
    -> MemberSelector(Selector=Ports.RightPump)
    -> PropertyMapping(PortName)
    -> GroupWorkflow RightSyringePump
        SubscribeSubject RightPumpCommands => #0
        ExternalizedMapping(PortName) => #1
        #0, #1 -> Harp.SyringePump.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM0)
        -> PublishSubject RightPumpMessages => #3
        SubscribeSubject SetupConfig
        -> MemberSelector(Selector=SyringePumps.UsePumps)
        -> Bonsai.Scripting.Expressions.ExpressionCondition => #6
          Expression: it
        SubscribeSubject Config => #7
        #6, #7 -> Zip => #8
        #3, #8 -> SubscribeWhen

        Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolDirectionPayload(ProtocolDirection=Forward)) => #10
        SubscribeSubject RightReward => #11
        SubscribeSubject SetupConfig => #12
        -> MemberSelector(Selector=SyringePumps.RightSlope) => #13
        #12 -> MemberSelector(Selector=SyringePumps.RightIntercept) => #14
        #11, #13, #14 -> CombineLatest
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Convert.ToInt32((Item1 - Item3) / Item2)
        -> MulticastSubject RightRewardSteps
        -> InputMapping(Selector=it, ProtocolStepCount(Selector=it))
        -> Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolStepCountPayload(ProtocolStepCount=75)) => #19
        Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateProtocolPeriodPayload(ProtocolPeriod=1)) => #20
        Harp.SyringePump.CreateMessage(MessageType=Write, Payload=Harp.SyringePump.CreateStepModePayload(StepMode=Half)) => #21
        #10, #19, #20, #21 -> Merge
        -> MulticastSubject RightPumpCommands => #23
        SubscribeSubject RightPumpMessages => #24
        #23, #24 -> SubscribeWhen

GroupWorkflow Output
    GroupWorkflow Behavior
        SubscribeSubject BehaviorMessages => #0
        SubscribeSubject OutputDirPath => #1
        SubscribeSubject Suffix
        -> Format(Format=events/behavior_{0}.bin, Selector=it) => #3
        #1, #3 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Item1 + Item2
        -> PropertyMapping(FileName) => #6
        #0, #6 -> Bonsai.Harp.MessageWriter
          FileName=C:/Users/HSP/Documents/BonsaiWorkflows/CDC.SoundLateralizationTask/output/freeze/ICE0000/250721/events/behavior_142323.bin
          Suffix=None
          Buffered=true
          Overwrite=false
          FilterType=Include
          MessageType=nil
        -> PublishSubject BehaviorBackup => #8
        SubscribeSubject OutputDirPath => #9
        #8, #9 -> SubscribeWhen

    GroupWorkflow SoundCard
        SubscribeSubject SoundCardMessages => #0
        SubscribeSubject OutputDirPath => #1
        SubscribeSubject Suffix
        -> Format(Format=events/soundcard_{0}.bin, Selector=it) => #3
        #1, #3 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Item1 + Item2
        -> PropertyMapping(FileName) => #6
        #0, #6 -> Bonsai.Harp.MessageWriter
          FileName=C:/Users/HSP/Documents/BonsaiWorkflows/CDC.SoundLateralizationTask/output/freeze/ICE0000/250721/events/soundcard_135700.bin
          Suffix=None
          Buffered=true
          Overwrite=false
          FilterType=Include
          MessageType=nil
        -> PublishSubject SoundCardBackup => #8
        SubscribeSubject OutputDirPath => #9
        #8, #9 -> SubscribeWhen

    GroupWorkflow LeftSyringePump
        SubscribeSubject LeftPumpMessages => #0
        SubscribeSubject OutputDirPath => #1
        SubscribeSubject Suffix
        -> Format(Format=events/left_pump_{0}.bin, Selector=it) => #3
        #1, #3 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Item1 + Item2
        -> PropertyMapping(FileName) => #6
        #0, #6 -> Bonsai.Harp.MessageWriter
          FileName=C:/Users/HSP/Documents/BonsaiWorkflows/CDC.SoundLateralizationTask/output/freeze/ICE0000/250721/events/left_pump_142323.bin
          Suffix=None
          Buffered=true
          Overwrite=false
          FilterType=Include
          MessageType=nil
        -> PublishSubject LeftPumpBackup => #8
        SubscribeSubject OutputDirPath => #9
        #8, #9 -> SubscribeWhen

    GroupWorkflow RightSyringePump
        SubscribeSubject RightPumpMessages => #0
        SubscribeSubject OutputDirPath => #1
        SubscribeSubject Suffix
        -> Format(Format=events/right_pump_{0}.bin, Selector=it) => #3
        #1, #3 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Item1 + Item2
        -> PropertyMapping(FileName) => #6
        #0, #6 -> Bonsai.Harp.MessageWriter
          FileName=C:/Users/HSP/Documents/BonsaiWorkflows/CDC.SoundLateralizationTask/output/freeze/ICE0000/250721/events/right_pump_142323.bin
          Suffix=None
          Buffered=true
          Overwrite=false
          FilterType=Include
          MessageType=nil
        -> PublishSubject RightPumpBackup => #8
        SubscribeSubject OutputDirPath => #9
        #8, #9 -> SubscribeWhen

    GroupWorkflow TaskLogs
        SubscribeSubject Logs => #0
        SubscribeSubject OutputDirPath => #1
        SubscribeSubject Suffix
        -> Format(Format=logs_{0}.csv, Selector=it) => #3
        #1, #3 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Item1 + Item2
        -> PropertyMapping(FileName) => #6
        #0, #6 -> Bonsai.IO.CsvWriter => #7
          FileName=C:/Users/HSP/Documents/BonsaiWorkflows/CDC.SoundLateralizationTask/output/freeze/ICE0000/250721/logs_142323.csv
          Append=false
          Overwrite=false
          Suffix=None
          IncludeHeader=false
        SubscribeSubject OutputDirPath => #8
        #7, #8 -> SubscribeWhen

    SubscribeSubject Config
    -> MemberSelector(Selector=Paths.Output)
    -> PropertyMapping(OutputDirPath)
    -> GroupWorkflow OutputDirectory => #8
        ExternalizedMapping(OutputDirPath)
        -> CF.GetOutputDir(OutputDirPath=C:/Users/HSP/Documents/BonsaiWorkflows/CDC.SoundLateralizationTask/output) => #1
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=Batch) => #3
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=AnimalId) => #5
        #1, #3, #5 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Item1 + "/" + Item2 + "/" + Item3 + "/" + DateTime.Now.ToString("yyMMdd") + "/"
        -> MulticastSubject OutputDirPath
        -> WorkflowOutput
    SubscribeSubject Config => #9
    #8, #9 -> SubscribeWhen

GroupWorkflow Input
    GroupWorkflow SessionSubjectUpdate
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=Session.StartingTrialNumber)
        -> Subtract(Operand=IntProperty(Value=1))
        -> MulticastSubject Trial

        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=FixationTime.OptoOnsetTime.MinValue)
        -> MulticastSubject BaseOptoOnset

        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=FixationTime.SoundOnsetTime.MinValue)
        -> MulticastSubject BaseSoundOnset

        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=ReactionTime.UseMinRt) => #11
        -> Condition
            WorkflowInput Source1
            -> Equal(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        -> DoubleProperty(Value=0) => #13
        #11 -> Condition => #14
            WorkflowInput Source1
            -> WorkflowOutput
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=ReactionTime.MinValue) => #16
        #14, #16 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #18
        #13, #18 -> Merge
        -> MulticastSubject BaseRT => #20
        SubscribeSubject AnimalConfig => #21
        SubscribeSubject LevelConfig => #22
        #21, #22 -> Zip => #23
        #20, #23 -> SubscribeWhen

        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=LnpTime.MinValue)
        -> MulticastSubject IntendedLNP

    Bonsai.IO.ReadAllText(Path=config\config.yml)
    -> Config.DeserializeFromYaml(Type=TypeMapping<Config.Config>)
    -> AsyncSubject Config

    SubscribeSubject Config
    -> MemberSelector(Selector=Paths.Animal)
    -> PropertyMapping(Path)
    -> Bonsai.IO.ReadAllText(Path=C:/Users/HSP/Documents/BonsaiWorkflows/CDC.SoundLateralizationTask/config/freeze/ICE0000.yml)
    -> Animal.DeserializeFromYaml(Type=TypeMapping<Animal.Animal>)
    -> AsyncSubject AnimalConfig => #9
    SubscribeSubject Config => #10
    #9, #10 -> SubscribeWhen

    Bonsai.IO.ReadAllText(Path=config\training.json)
    -> Training.DeserializeFromJson(Type=TypeMapping<Training.Training>)
    -> AsyncSubject TrainingConfig => #14
    SubscribeSubject Config => #15
    #14, #15 -> SubscribeWhen

    Bonsai.IO.ReadAllText(Path=config\setup.json)
    -> Setup.DeserializeFromJson(Type=TypeMapping<Setup.Setup>)
    -> AsyncSubject SetupConfig => #19
    SubscribeSubject Config => #20
    #19, #20 -> SubscribeWhen

    Bonsai.IO.ReadAllText(Path=config\prints.json)
    -> PrintDict.DeserializeFromJson(Type=TypeMapping<PrintDict.PrintDict>)
    -> AsyncSubject Prints

    SubscribeSubject AnimalConfig
    -> MemberSelector(Selector=Session.StartingTrainingLevel)
    -> BehaviorSubject TrainingLevel

    SubscribeSubject TrainingLevel
    -> Subtract(Operand=IntProperty(Value=1)) => #29
    SubscribeSubject TrainingConfig
    -> MemberSelector(Selector=Levels) => #31
    #29, #31 -> WithLatestFrom
    -> InputMapping(Selector=Item2, Value(Selector=Item1))
    -> Index(Operand=IntProperty(Value=0))
    -> BehaviorSubject LevelConfig => #35
    SubscribeSubject AnimalConfig => #36
    SubscribeSubject TrainingConfig => #37
    #36, #37 -> Zip => #38
    #35, #38 -> SubscribeWhen

    SubscribeSubject LevelConfig
    -> MemberSelector(Selector=PenaltyTimes.Incorrect)
    -> MulticastSubject Penalty

    SubscribeSubject AnimalConfig
    -> MemberSelector(Selector=Sound.FixedAbl)
    -> MulticastSubject ABL

GroupWorkflow SubjectInitialization
    StringProperty
    -> IgnoreElements
    -> BehaviorSubject Logs

    Timer(DueTime=PT0S, Period=PT0S)
    -> Take(Count=1)
    -> Timestamp
    -> MemberSelector(Selector=Timestamp)
    -> Format(Format={0:HHmmss}, Selector=it)
    -> BehaviorSubject Suffix

    BooleanProperty(Value=false) => #9
    DoubleProperty(Value=0) => #10
    #9, #10 -> Zip
    -> Bonsai.Harp.CreateTimestamped
    -> BehaviorSubject LeftPoke
    -> BehaviorSubject CenterPoke
    -> BehaviorSubject RightPoke
    -> BehaviorSubject SoundOnsetTrigger
    -> BehaviorSubject LEDOnsetTrigger
    -> BehaviorSubject LNPTrigger

    IntProperty(Value=0) => #19
    IntProperty(Value=0) => #20
    #19, #20 -> Zip
    -> BehaviorSubject ParsedOutcome

    Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=32, PayloadType=U8, Value=0))
    -> IgnoreElements
    -> BehaviorSubject BehaviorCommands
    -> BehaviorSubject SoundCardCommands
    -> BehaviorSubject LeftPumpCommands
    -> BehaviorSubject RightPumpCommands

    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> BehaviorSubject Random

    StringProperty
    -> IgnoreElements
    -> BehaviorSubject PrintCode
    -> BehaviorSubject Print
    -> BehaviorSubject OutputDirPath

    DoubleProperty(Value=0)
    -> IgnoreElements
    -> BehaviorSubject TrialEnd
    -> BehaviorSubject TrialStart
    -> BehaviorSubject LNPStart
    -> BehaviorSubject LeftReward
    -> BehaviorSubject RightReward

    IntProperty(Value=0)
    -> IgnoreElements
    -> BehaviorSubject WaterDelivery
    -> BehaviorSubject LeftOrRight
    -> BehaviorSubject PlaySound
    -> BehaviorSubject StartFixation

    BooleanProperty(Value=false)
    -> IgnoreElements
    -> BehaviorSubject NewTrialRequest

    IntProperty(Value=0)
    -> BehaviorSubject Trial
    -> BehaviorSubject LeftIntensity
    -> BehaviorSubject RightIntensity
    -> BehaviorSubject StopSound
    -> BehaviorSubject Outcome
    -> BehaviorSubject StartSound

    DoubleProperty(Value=0)
    -> BehaviorSubject BaseOptoOnset
    -> BehaviorSubject BaseSoundOnset
    -> BehaviorSubject BaseRT
    -> BehaviorSubject IntendedLNP
    -> BehaviorSubject IntendedSoundOnset
    -> BehaviorSubject IntendedOptoOnset
    -> BehaviorSubject LeftAmp
    -> BehaviorSubject RightAmp
    -> BehaviorSubject ABL
    -> BehaviorSubject ILD
    -> BehaviorSubject Penalty
    -> BehaviorSubject LEDStart
    -> BehaviorSubject SoundStart
    -> BehaviorSubject TrialsCompleted
    -> BehaviorSubject ITIStart
    -> BehaviorSubject ITIEnd
    -> BehaviorSubject LeftRewardSteps
    -> BehaviorSubject RightRewardSteps
    -> BehaviorSubject ResponsePoke

GroupWorkflow GUI
    GroupWorkflow Prints
        GroupWorkflow NewTrial
            StringProperty => #0
            ExternalizedMapping(PrintCode) => #1
            #0, #1 -> GroupWorkflow TextToPrint => #2
                SubscribeSubject Prints
                -> MemberSelector(Selector=Prints) => #1
                ExternalizedMapping(Value(DisplayName=PrintCode)) => #2
                #1, #2 -> Index(Operand=StringProperty(Value=new_trial)) => #3
                -> MemberSelector(Selector=Text) => #4
                WorkflowInput Source1 => #5
                #3 -> MemberSelector(Selector=Units) => #6
                #4, #5, #6 -> CombineLatest
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Item1 + Item2 + " " + Item3
                -> WorkflowOutput
            #2, #1 -> GroupWorkflow Print
                SubscribeSubject PrintCode => #0
                ExternalizedMapping(PrintCode) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintCode)) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=new_trial))
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Print
                -> WorkflowOutput
            -> WorkflowOutput

        GroupWorkflow CorrectSide
            SubscribeSubject LeftOrRight => #0
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -1
            -> StringProperty(Value=Left) => #2
            #0 -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == 1
            -> StringProperty(Value=Right) => #4
            #2, #4 -> Merge => #5
            ExternalizedMapping(PrintCode) => #6
            #5, #6 -> GroupWorkflow TextToPrint => #7
                SubscribeSubject Prints
                -> MemberSelector(Selector=Prints) => #1
                ExternalizedMapping(Value(DisplayName=PrintCode)) => #2
                #1, #2 -> Index(Operand=StringProperty(Value=correct_side)) => #3
                -> MemberSelector(Selector=Text) => #4
                WorkflowInput Source1 => #5
                #3 -> MemberSelector(Selector=Units) => #6
                #4, #5, #6 -> CombineLatest
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Item1 + Item2 + " " + Item3
                -> WorkflowOutput
            #7, #6 -> GroupWorkflow Print
                SubscribeSubject PrintCode => #0
                ExternalizedMapping(PrintCode) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintCode)) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=correct_side))
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Print
                -> WorkflowOutput
            -> WorkflowOutput

        GroupWorkflow StartTrial
            StringProperty => #0
            ExternalizedMapping(PrintCode) => #1
            #0, #1 -> GroupWorkflow TextToPrint => #2
                SubscribeSubject Prints
                -> MemberSelector(Selector=Prints) => #1
                ExternalizedMapping(Value(DisplayName=PrintCode)) => #2
                #1, #2 -> Index(Operand=StringProperty(Value=start_trial)) => #3
                -> MemberSelector(Selector=Text) => #4
                WorkflowInput Source1 => #5
                #3 -> MemberSelector(Selector=Units) => #6
                #4, #5, #6 -> CombineLatest
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Item1 + Item2 + " " + Item3
                -> WorkflowOutput
            #2, #1 -> GroupWorkflow Print
                SubscribeSubject PrintCode => #0
                ExternalizedMapping(PrintCode) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintCode)) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=start_trial))
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Print
                -> WorkflowOutput
            -> WorkflowOutput

        GroupWorkflow Fixation
            StringProperty => #0
            ExternalizedMapping(PrintCode) => #1
            #0, #1 -> GroupWorkflow TextToPrint => #2
                SubscribeSubject Prints
                -> MemberSelector(Selector=Prints) => #1
                ExternalizedMapping(Value(DisplayName=PrintCode)) => #2
                #1, #2 -> Index(Operand=StringProperty(Value=fixation)) => #3
                -> MemberSelector(Selector=Text) => #4
                WorkflowInput Source1 => #5
                #3 -> MemberSelector(Selector=Units) => #6
                #4, #5, #6 -> CombineLatest
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Item1 + Item2 + " " + Item3
                -> WorkflowOutput
            #2, #1 -> GroupWorkflow Print
                SubscribeSubject PrintCode => #0
                ExternalizedMapping(PrintCode) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintCode)) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=fixation))
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Print
                -> WorkflowOutput
            -> WorkflowOutput

        GroupWorkflow StimulusPresentation
            StringProperty => #0
            ExternalizedMapping(PrintCode) => #1
            #0, #1 -> GroupWorkflow TextToPrint => #2
                SubscribeSubject Prints
                -> MemberSelector(Selector=Prints) => #1
                ExternalizedMapping(Value(DisplayName=PrintCode)) => #2
                #1, #2 -> Index(Operand=StringProperty(Value=stimulus)) => #3
                -> MemberSelector(Selector=Text) => #4
                WorkflowInput Source1 => #5
                #3 -> MemberSelector(Selector=Units) => #6
                #4, #5, #6 -> CombineLatest
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Item1 + Item2 + " " + Item3
                -> WorkflowOutput
            #2, #1 -> GroupWorkflow Print
                SubscribeSubject PrintCode => #0
                ExternalizedMapping(PrintCode) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintCode)) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=stimulus))
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Print
                -> WorkflowOutput
            -> WorkflowOutput

        GroupWorkflow MovementTime
            StringProperty => #0
            ExternalizedMapping(PrintCode) => #1
            #0, #1 -> GroupWorkflow TextToPrint => #2
                SubscribeSubject Prints
                -> MemberSelector(Selector=Prints) => #1
                ExternalizedMapping(Value(DisplayName=PrintCode)) => #2
                #1, #2 -> Index(Operand=StringProperty(Value=movement_time)) => #3
                -> MemberSelector(Selector=Text) => #4
                WorkflowInput Source1 => #5
                #3 -> MemberSelector(Selector=Units) => #6
                #4, #5, #6 -> CombineLatest
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Item1 + Item2 + " " + Item3
                -> WorkflowOutput
            #2, #1 -> GroupWorkflow Print
                SubscribeSubject PrintCode => #0
                ExternalizedMapping(PrintCode) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintCode)) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=movement_time))
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Print
                -> WorkflowOutput
            -> WorkflowOutput

        GroupWorkflow Outcome
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == 2
            -> StringProperty(Value="Right answer") => #2
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == 1
            -> StringProperty(Value="Wrong answer") => #5
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -1
            -> StringProperty(Value="CNP Abort") => #8
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -2
            -> StringProperty(Value="Fixation Abort") => #11
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -3
            -> StringProperty(Value="RT+ Abort") => #14
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -4
            -> StringProperty(Value="RT- Abort") => #17
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -5
            -> StringProperty(Value="MT+ Abort") => #20
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -6
            -> StringProperty(Value="MT- Abort") => #23
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -7
            -> StringProperty(Value="LNP Abort") => #26
            SubscribeSubject Outcome
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -8
            -> StringProperty(Value="IO crash") => #29
            #2, #5, #8, #11, #14, #17, #20, #23, #26, #29 -> Merge => #30
            ExternalizedMapping(PrintCode) => #31
            #30, #31 -> GroupWorkflow TextToPrint => #32
                SubscribeSubject Prints
                -> MemberSelector(Selector=Prints) => #1
                ExternalizedMapping(Value(DisplayName=PrintCode)) => #2
                #1, #2 -> Index(Operand=StringProperty(Value=outcome)) => #3
                -> MemberSelector(Selector=Text) => #4
                WorkflowInput Source1 => #5
                #3 -> MemberSelector(Selector=Units) => #6
                #4, #5, #6 -> CombineLatest
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Item1 + Item2 + " " + Item3
                -> WorkflowOutput
            #32, #31 -> GroupWorkflow Print
                SubscribeSubject PrintCode => #0
                ExternalizedMapping(PrintCode) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintCode)) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=outcome))
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Print
                -> WorkflowOutput
            -> WorkflowOutput

        GroupWorkflow PenaltyTime
            SubscribeSubject Penalty
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #1
              Expression: it.ToString()
            ExternalizedMapping(PrintCode) => #2
            #1, #2 -> GroupWorkflow TextToPrint => #3
                SubscribeSubject Prints
                -> MemberSelector(Selector=Prints) => #1
                ExternalizedMapping(Value(DisplayName=PrintCode)) => #2
                #1, #2 -> Index(Operand=StringProperty(Value=penalty_time)) => #3
                -> MemberSelector(Selector=Text) => #4
                WorkflowInput Source1 => #5
                #3 -> MemberSelector(Selector=Units) => #6
                #4, #5, #6 -> CombineLatest
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Item1 + Item2 + " " + Item3
                -> WorkflowOutput
            #3, #2 -> GroupWorkflow Print
                SubscribeSubject PrintCode => #0
                ExternalizedMapping(PrintCode) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintCode)) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=penalty_time))
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Print
                -> WorkflowOutput
            -> WorkflowOutput

        GroupWorkflow RewardDelivery
            SubscribeSubject WaterDelivery => #0
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == -1
            -> StringProperty(Value=Left) => #2
            #0 -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: it == 1
            -> StringProperty(Value=Right) => #4
            #2, #4 -> Merge => #5
            ExternalizedMapping(PrintCode) => #6
            #5, #6 -> GroupWorkflow TextToPrint => #7
                SubscribeSubject Prints
                -> MemberSelector(Selector=Prints) => #1
                ExternalizedMapping(Value(DisplayName=PrintCode)) => #2
                #1, #2 -> Index(Operand=StringProperty(Value=reward_delivery)) => #3
                -> MemberSelector(Selector=Text) => #4
                WorkflowInput Source1 => #5
                #3 -> MemberSelector(Selector=Units) => #6
                #4, #5, #6 -> CombineLatest
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: Item1 + Item2 + " " + Item3
                -> WorkflowOutput
            #7, #6 -> GroupWorkflow Print
                SubscribeSubject PrintCode => #0
                ExternalizedMapping(PrintCode) => #1
                #0, #1 -> Condition => #2
                    WorkflowInput Source1 => #0
                    ExternalizedMapping(Value(DisplayName=PrintCode)) => #1
                    #0, #1 -> Equal(Operand=StringProperty(Value=reward_delivery))
                    -> WorkflowOutput
                WorkflowInput Source1 => #3
                #2, #3 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> MulticastSubject Print
                -> WorkflowOutput
            -> WorkflowOutput

    StringProperty(Value="Rat: ") => #1
    SubscribeSubject AnimalConfig
    -> MemberSelector(Selector=AnimalId)
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #4
      Expression: it.ToString()
    #1, #4 -> CombineLatest
    -> Add
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text="Rat: ICE0000")
    -> VisualizerMapping => #9
    StringProperty(Value="Trial: ") => #10
    SubscribeSubject Trial
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #12
      Expression: it.ToString()
    #10, #12 -> CombineLatest
    -> Add
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text="Trial: 4")
    -> VisualizerMapping => #17
    StringProperty(Value="Trials Completed: ") => #18
    SubscribeSubject TrialsCompleted
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #20
      Expression: it.ToString()
    #18, #20 -> CombineLatest
    -> Add
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text="Trials Completed: 2")
    -> VisualizerMapping => #25
    StringProperty(Value="ILD: ") => #26
    SubscribeSubject ILD
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #28
      Expression: it.ToString()
    StringProperty(Value=" dB") => #29
    #26, #28, #29 -> CombineLatest
    -> Add
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text="ILD: 50 dB")
    -> VisualizerMapping => #34
    StringProperty(Value="ABL: ") => #35
    SubscribeSubject ABL
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #37
      Expression: it.ToString()
    StringProperty(Value=" dB") => #38
    #35, #37, #38 -> CombineLatest
    -> Add
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text="ABL: 50 dB")
    -> VisualizerMapping => #43
    StringProperty(Value="Current Fixation Time: ") => #44
    SubscribeSubject IntendedOptoOnset => #45
    SubscribeSubject IntendedSoundOnset => #46
    #45, #46 -> CombineLatest
    -> Add
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #49
      Expression: it.ToString("0.00")
    StringProperty(Value=" ms") => #50
    #44, #49, #50 -> CombineLatest
    -> Add
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text="Current Fixation Time: 0.00 ms")
    -> VisualizerMapping => #55
    StringProperty(Value="Current ITI: ") => #56
    SubscribeSubject LevelConfig
    -> MemberSelector(Selector=Iti.Value)
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #59
      Expression: it.ToString()
    StringProperty(Value=" s") => #60
    #56, #59, #60 -> CombineLatest
    -> Add
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text="Current ITI: 1 s")
    -> VisualizerMapping => #65
    StringProperty(Value="Time Elapsed: ") => #66
    Timer(DueTime=PT0S, Period=PT1S)
    -> Bonsai.Scripting.Expressions.ExpressionTransform FromSecondsToTimeSpan => #68
      Expression: TimeSpan.FromSeconds(it).ToString()
    #66, #68 -> CombineLatest
    -> Add
    -> PropertyMapping(Text)
    -> Bonsai.Gui.LabelBuilder(Enabled=true, Visible=true, Text="Time Elapsed: 00:00:33")
    -> VisualizerMapping => #73
    #9, #17, #25, #34, #43, #55, #65, #73 -> Bonsai.Gui.TableLayoutPanelBuilder
      Enabled=true
      Visible=true
      ColumnCount=1
      RowCount=8
      ColumnStyles=""
      RowStyles=""
      CellSpans
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
        CellSpan(ColumnSpan=1, RowSpan=1)
    -> VisualizerMapping => #75
    SubscribeSubject Camera
    -> MemberSelector(Selector=Image)
    -> VisualizerMapping => #78
    SubscribeSubject Print
    -> VisualizerMapping => #80
    Bonsai.Gui.ButtonBuilder RewardLeftButton(Enabled=true, Visible=true, Text="Reward Left")
    -> PublishSubject RewardLeftButton
    -> VisualizerMapping => #83
    Bonsai.Gui.ButtonBuilder RewardRightButton(Enabled=true, Visible=true, Text="Reward Right")
    -> PublishSubject RewardRightButton
    -> VisualizerMapping => #86
    Bonsai.Gui.ButtonBuilder EndSessionButton(Enabled=true, Visible=true, Text="End Session")
    -> PublishSubject EndSessionButton
    -> VisualizerMapping => #89
    #83, #86, #89 -> Bonsai.Gui.TableLayoutPanelBuilder
      Enabled=true
      Visible=true
      ColumnCount=2
      RowCount=2
      ColumnStyles=""
      RowStyles=""
      CellSpans(CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=2, RowSpan=1))
    -> VisualizerMapping => #91
    #75, #78, #80, #91 -> Bonsai.Gui.TableLayoutPanelBuilder
      Enabled=true
      Visible=true
      ColumnCount=2
      RowCount=2
      ColumnStyles=""
      RowStyles=""
      CellSpans(CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1))
    -> WorkflowOutput

Timer(DueTime=PT0S, Period=PT0S)
-> SelectMany Inter-TrialInterval
    WorkflowInput Source1
    -> IncludeWorkflow(Path=Extensions\PrintRequest.bonsai, PrintCode=new_trial, PrintSubjectName=PrintCode)
    -> Delay(DueTime=PT0.0000001S)
    -> BooleanProperty(Value=true)
    -> MulticastSubject NewTrialRequest => #4
    SubscribeSubject LevelConfig
    -> MemberSelector(Selector=Iti.Value)
    -> Bonsai.Scripting.Expressions.ExpressionTransform FromSecondsToTimeSpan
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime) => #8
    #4, #8 -> Delay(DueTime=PT1S)
    -> IntProperty(Value=0) => #10
    Source2=#10 -> Take(Count=1)
    -> WorkflowOutput
-> Bonsai.Scripting.Expressions.ExpressionCondition IsTrue
  Expression: it == 0
-> SelectMany StartTrial => #9
    WorkflowInput Source1
    -> IncludeWorkflow(Path=Extensions\PrintRequest.bonsai, PrintCode=start_trial, PrintSubjectName=PrintCode)
    -> GroupWorkflow PokeDetection
        SubscribeSubject CenterPoke
        -> Bonsai.Scripting.Expressions.ExpressionCondition IsPokingCNP
          Expression: Value
        -> MemberSelector(Selector=Seconds) => #2
        WorkflowInput Source1
        -> IncludeWorkflow(Path=Extensions\TimestampEvent.bonsai, TimestampSubject=Timestamp)
        -> MemberSelector(Selector=Seconds) => #5
        #2, #5 -> WithLatestFrom
        -> Subtract
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: it >= 0
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DOPort0))
        -> MulticastSubject BehaviorCommands
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DOPort1))
        -> MulticastSubject BehaviorCommands
        -> WorkflowOutput
    -> IntProperty(Value=0) => #3
    GroupWorkflow MaxWait
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=MaxWait)
        -> Bonsai.Scripting.Expressions.ExpressionTransform FromSecondsToTimeSpan
          Expression: TimeSpan.FromSeconds(it)
        -> WorkflowOutput
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT3M, Period=PT0S)
    -> IntProperty(Value=-1) => #7
    #3, #7 -> Merge
    -> Take(Count=1)
    -> WorkflowOutput
-> Bonsai.Scripting.Expressions.ExpressionCondition IsTrue
  Expression: it == 0
-> SelectMany FixationTime => #11
    WorkflowInput Source1
    -> IncludeWorkflow(Path=Extensions\PrintRequest.bonsai, PrintCode=fixation, PrintSubjectName=PrintCode)
    -> MulticastSubject StartFixation

    GroupWorkflow FixationTime => #3
        SubscribeSubject SoundOnsetTrigger
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: !Value
        -> Skip(Count=1)
        -> MemberSelector(Selector=Seconds)
        -> MulticastSubject SoundStart
        -> IntProperty(Value=0)
        -> WorkflowOutput
    GroupWorkflow FixationBroken => #4
        SubscribeSubject CenterPoke => #0
        -> Bonsai.Scripting.Expressions.ExpressionCondition !IsPokingCNP
          Expression: !Value
        -> MemberSelector(Selector=Seconds) => #2
        #0 -> Bonsai.Scripting.Expressions.ExpressionCondition IsPokingCNP
          Expression: Value
        -> MemberSelector(Selector=Seconds) => #4
        #2, #4 -> Zip
        -> IntProperty(Value=-2)
        -> WorkflowOutput
    #3, #4 -> Merge
    -> Take(Count=1)
    -> WorkflowOutput
-> Bonsai.Scripting.Expressions.ExpressionCondition IsTrue
  Expression: it == 0
-> SelectMany Stimulus => #13
    SubscribeSubject CenterPoke
    -> Bonsai.Scripting.Expressions.ExpressionCondition !IsPokingCNP
      Expression: !Value
    -> MemberSelector(Selector=Seconds) => #2
    WorkflowInput Source1
    -> GroupWorkflow PlaySound(Description="Presents the noise stimulus to the animal")
        WorkflowInput Source1
        -> IntProperty(Value=0)
        -> MulticastSubject StartSound
        -> IncludeWorkflow(Path=Extensions\PrintRequest.bonsai, PrintCode=stimulus, PrintSubjectName=PrintCode)
        -> WorkflowOutput
    -> IncludeWorkflow(Path=Extensions\TimestampEvent.bonsai, TimestampSubject=Timestamp)
    -> MemberSelector(Selector=Seconds) => #6
    #2, #6 -> Zip
    -> Subtract => #8
    -> Condition "RT >= BaseRT" => #9
        WorkflowInput Source1 => #0
        SubscribeSubject BaseRT => #1
        #0, #1 -> Zip
        -> GreaterThanOrEqual
        -> WorkflowOutput
    -> Condition "UseRT == 0"
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=ReactionTime.TurnSoundOff)
        -> WorkflowOutput
    -> IntProperty(Value=0)
    -> MulticastSubject StopSound => #12
    #9 -> Condition "UseRT != 0"
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=ReactionTime.TurnSoundOff)
        -> Equal(Operand=BooleanProperty(Value=false))
        -> WorkflowOutput
    -> IntProperty(Value=0) => #14
    #8 -> Condition "RT < BaseRT"
        WorkflowInput Source1 => #0
        SubscribeSubject BaseRT => #1
        #0, #1 -> Zip
        -> LessThan
        -> WorkflowOutput
    -> IntProperty(Value=-4)
    -> MulticastSubject StopSound => #17
    GroupWorkflow MaxRT
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=MaxReactionTime)
        -> Bonsai.Scripting.Expressions.ExpressionTransform FromSecondsToTimeSpan
          Expression: TimeSpan.FromSeconds(it)
        -> WorkflowOutput
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT10S, Period=PT0S)
    -> Condition "UseMaxRT != 0"
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=ReactionTime.UseMaxRt)
        -> WorkflowOutput
    -> IntProperty(Value=-3)
    -> MulticastSubject StopSound => #23
    #12, #14, #17, #23 -> Merge => #24
    Source2=#24 -> Take(Count=1)
    -> WorkflowOutput
-> Bonsai.Scripting.Expressions.ExpressionCondition IsTrue
  Expression: it == 0
-> SelectMany Decision => #15
    WorkflowInput Source1
    -> IncludeWorkflow(Path=Extensions\PrintRequest.bonsai, PrintCode=movement_time, PrintSubjectName=PrintCode)

    GroupWorkflow Answer
        SubscribeSubject LeftPoke
        -> Bonsai.Scripting.Expressions.ExpressionCondition IsPokingLeft
          Expression: Value
        -> Sink SaveAnswer => #2
            WorkflowInput Source1
            -> IntProperty(Value=-1)
            -> MulticastSubject ResponsePoke
            -> WorkflowOutput
        SubscribeSubject RightPoke
        -> Bonsai.Scripting.Expressions.ExpressionCondition IsPokingRight
          Expression: Value
        -> Sink SaveAnswer => #5
            WorkflowInput Source1
            -> IntProperty(Value=1)
            -> MulticastSubject ResponsePoke
            -> WorkflowOutput
        #2, #5 -> Merge
        -> MemberSelector(Selector=Seconds)
        -> MulticastSubject LNPStart
        -> Sink StopSound
            WorkflowInput Source1
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DOPort2))
            -> MulticastSubject BehaviorCommands
            -> IntProperty(Value=0)
            -> MulticastSubject StopSound
            -> WorkflowOutput
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany Logs => #3
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> StringProperty(Value="Decision: Answer")
        -> MulticastSubject Logs
        -> IncludeWorkflow(Path=Extensions\TimestampEvent.bonsai, TimestampSubject=Timestamp) => #4
        #0, #4 -> Zip
        -> MemberSelector(Selector=Item1)
        -> Take(Count=1)
        -> WorkflowOutput
    SubscribeSubject CenterPoke
    -> Bonsai.Scripting.Expressions.ExpressionCondition !IsPokingCNP
      Expression: !Value
    -> MemberSelector(Selector=Seconds) => #6
    #3, #6 -> Zip
    -> Subtract => #8
    -> Condition "TimedMT >= MinMT"
        WorkflowInput Source1 => #0
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=MinMovementTime) => #2
        #0, #2 -> Zip
        -> GreaterThanOrEqual
        -> WorkflowOutput
    -> IntProperty(Value=0)
    -> SelectMany Logs
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> StringProperty(Value="Decision: Pre-LNP")
        -> MulticastSubject Logs
        -> IncludeWorkflow(Path=Extensions\TimestampEvent.bonsai, TimestampSubject=Timestamp) => #4
        #0, #4 -> Zip
        -> MemberSelector(Selector=Item1)
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany LNPTime
        Annotation "TODO: verify what's the first event sent"(Text="") => #0
        -> SubscribeSubject LNPTrigger
        -> Condition => #2
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Value)
            -> Equal(Operand=BooleanProperty(Value=false)) => #2
            #0 -> MemberSelector(Selector=Seconds) => #3
            SubscribeSubject LNPStart => #4
            #3, #4 -> CombineLatest
            -> GreaterThanOrEqual => #6
            #2, #6 -> CombineLatest
            -> LogicalAnd
            -> WorkflowOutput
        #0 -> SubscribeSubject LeftPoke
        -> Condition IsLeft => #4
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> Equal(Operand=BooleanProperty(Value=false)) => #2
            SubscribeSubject ResponsePoke
            -> Equal(Operand=IntProperty(Value=-1)) => #4
            #2, #4 -> CombineLatest
            -> LogicalAnd
            -> WorkflowOutput
        #0 -> SubscribeSubject RightPoke
        -> Condition IsRight => #6
            WorkflowInput Source1
            -> MemberSelector(Selector=Value)
            -> Equal(Operand=BooleanProperty(Value=false)) => #2
            SubscribeSubject ResponsePoke
            -> Equal(Operand=IntProperty(Value=1)) => #4
            #2, #4 -> CombineLatest
            -> LogicalAnd
            -> WorkflowOutput
        #2, #4, #6 -> Merge
        -> Take(Count=1)
        -> MemberSelector(Selector=Seconds) => #9
        SubscribeSubject LNPStart => #10
        #9, #10 -> Zip
        -> Subtract
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany Logs => #13
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> StringProperty(Value="Decision: Pos-LNP")
        -> MulticastSubject Logs
        -> IncludeWorkflow(Path=Extensions\TimestampEvent.bonsai, TimestampSubject=Timestamp) => #4
        #0, #4 -> Zip
        -> MemberSelector(Selector=Item1)
        -> Take(Count=1)
        -> WorkflowOutput
    -> Condition "TimedLNP >= IntendedLNP"
        WorkflowInput Source1 => #0
        SubscribeSubject IntendedLNP => #1
        #0, #1 -> CombineLatest
        -> GreaterThanOrEqual
        -> WorkflowOutput
    -> SelectMany Logs
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> StringProperty(Value="Decision: Pre-evaluation")
        -> MulticastSubject Logs
        -> IncludeWorkflow(Path=Extensions\TimestampEvent.bonsai, TimestampSubject=Timestamp) => #4
        #0, #4 -> Zip
        -> MemberSelector(Selector=Item1)
        -> Take(Count=1)
        -> WorkflowOutput
    -> GroupWorkflow EvaluateAnswer
        WorkflowInput Source1 => #0
        SubscribeSubject ResponsePoke => #1
        SubscribeSubject LeftOrRight => #2
        #1, #2 -> CombineLatest => #3
        #0, #3 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #5
        -> Bonsai.Scripting.Expressions.ExpressionCondition AnswerIsRight
          Expression: Item1 == Item2
        -> IntProperty(Value=2) => #7
        #5 -> Bonsai.Scripting.Expressions.ExpressionCondition AnswerIsWrong
          Expression: Item1 != Item2
        -> IntProperty(Value=1) => #9
        #7, #9 -> Merge
        -> MulticastSubject Outcome
        -> IncludeWorkflow(Path=Extensions\PrintRequest.bonsai, PrintCode=outcome, PrintSubjectName=PrintCode)
        -> WorkflowOutput
    -> SelectMany Logs => #17
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> StringProperty(Value="Decision: Pos-evaluation")
        -> MulticastSubject Logs
        -> IncludeWorkflow(Path=Extensions\TimestampEvent.bonsai, TimestampSubject=Timestamp) => #4
        #0, #4 -> Zip
        -> MemberSelector(Selector=Item1)
        -> Take(Count=1)
        -> WorkflowOutput
    #13 -> Condition "TimedLNP < IntendedLNP"
        WorkflowInput Source1 => #0
        SubscribeSubject IntendedLNP => #1
        #0, #1 -> CombineLatest
        -> LessThan
        -> WorkflowOutput
    -> SelectMany Logs
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> StringProperty(Value="Decision: LNP Abort")
        -> MulticastSubject Logs
        -> IncludeWorkflow(Path=Extensions\TimestampEvent.bonsai, TimestampSubject=Timestamp) => #4
        #0, #4 -> Zip
        -> MemberSelector(Selector=Item1)
        -> Take(Count=1)
        -> WorkflowOutput
    -> IntProperty(Value=-7) => #20
    #8 -> Condition "TimedMT < MinMT"
        WorkflowInput Source1 => #0
        SubscribeSubject AnimalConfig
        -> MemberSelector(Selector=MinMovementTime) => #2
        #0, #2 -> Zip
        -> LessThan
        -> WorkflowOutput
    -> SelectMany Logs
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> StringProperty(Value="Decision: MT- Abort")
        -> MulticastSubject Logs
        -> IncludeWorkflow(Path=Extensions\TimestampEvent.bonsai, TimestampSubject=Timestamp) => #4
        #0, #4 -> Zip
        -> MemberSelector(Selector=Item1)
        -> Take(Count=1)
        -> WorkflowOutput
    -> IntProperty(Value=-6) => #23
    GroupWorkflow MaxMT
        SubscribeSubject LevelConfig
        -> MemberSelector(Selector=MaxMt)
        -> Bonsai.Scripting.Expressions.ExpressionTransform FromSecondsToTimeSpan
          Expression: TimeSpan.FromSeconds(it)
        -> WorkflowOutput
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT3M, Period=PT0S)
    -> GroupWorkflow StopSound(Description="Stops the noise stimulus")
        WorkflowInput Source1
        -> IntProperty(Value=0)
        -> MulticastSubject StopSound
        -> WorkflowOutput
    -> IntProperty(Value=-5) => #28
    SubscribeSubject LNPStart
    -> Skip(Count=1) => #30
    #28, #30 -> TakeUntil
    -> SelectMany Logs => #32
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> StringProperty(Value="Decision: MT+ Abort")
        -> MulticastSubject Logs
        -> IncludeWorkflow(Path=Extensions\TimestampEvent.bonsai, TimestampSubject=Timestamp) => #4
        #0, #4 -> Zip
        -> MemberSelector(Selector=Item1)
        -> Take(Count=1)
        -> WorkflowOutput
    #17, #20, #23, #32 -> Merge
    -> Take(Count=1)
    -> WorkflowOutput
-> Bonsai.Scripting.Expressions.ExpressionCondition IsTrue
  Expression: it > 0
-> SelectMany Reward => #17
    WorkflowInput Source1
    -> SelectMany Logs => #1
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> StringProperty(Value="Reward: Beginning")
        -> MulticastSubject Logs
        -> IncludeWorkflow(Path=Extensions\TimestampEvent.bonsai, TimestampSubject=Timestamp) => #4
        #0, #4 -> Zip
        -> MemberSelector(Selector=Item1)
        -> Take(Count=1)
        -> WorkflowOutput
    SubscribeSubject Outcome => #2
    #1, #2 -> WithLatestFrom
    -> MemberSelector(Selector=Item2) => #4
    -> Bonsai.Scripting.Expressions.ExpressionCondition AnswerIsRight
      Expression: it == 2
    -> SelectMany Logs
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> StringProperty(Value="Reward: Before Water Delivery")
        -> MulticastSubject Logs
        -> IncludeWorkflow(Path=Extensions\TimestampEvent.bonsai, TimestampSubject=Timestamp) => #4
        #0, #4 -> Zip
        -> MemberSelector(Selector=Item1)
        -> Take(Count=1)
        -> WorkflowOutput
    -> GroupWorkflow WaterDelivery => #7
        WorkflowInput Source1 => #0
        SubscribeSubject ResponsePoke => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> MulticastSubject WaterDelivery
        -> WorkflowOutput
    #4 -> Bonsai.Scripting.Expressions.ExpressionCondition AnswerIsWrong
      Expression: it == 1
    -> SelectMany Logs
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> StringProperty(Value="Reward: Before Penalty")
        -> MulticastSubject Logs
        -> IncludeWorkflow(Path=Extensions\TimestampEvent.bonsai, TimestampSubject=Timestamp) => #4
        #0, #4 -> Zip
        -> MemberSelector(Selector=Item1)
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany Penalty(Description=FIXME)
        SubscribeSubject Penalty
        -> Bonsai.Scripting.Expressions.ExpressionTransform FromSecondsToTimeSpan
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT1S, Period=PT0S)
        -> Take(Count=1)
        -> WorkflowOutput

        WorkflowInput Source1
        -> IncludeWorkflow(Path=Extensions\PrintRequest.bonsai, PrintCode=penalty_time, PrintSubjectName=PrintCode)
    -> IntProperty(Value=1) => #11
    #7, #11 -> Merge
    -> SelectMany Logs => #13
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> StringProperty(Value="Reward: After Water Delivery/Penalty")
        -> MulticastSubject Logs
        -> IncludeWorkflow(Path=Extensions\TimestampEvent.bonsai, TimestampSubject=Timestamp) => #4
        #0, #4 -> Zip
        -> MemberSelector(Selector=Item1)
        -> Take(Count=1)
        -> WorkflowOutput
    SubscribeSubject TrialsCompleted => #14
    #13, #14 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Add(Operand=DoubleProperty(Value=1))
    -> MulticastSubject TrialsCompleted
    -> IntProperty(Value=0)
    -> Take(Count=1)
    -> WorkflowOutput
#15, #13, #11, #9 -> Merge
-> Bonsai.Scripting.Expressions.ExpressionCondition IsFalse
  Expression: it < 0
-> SelectMany Abort => #20
    WorkflowInput Source1
    -> MulticastSubject Outcome
    -> IncludeWorkflow(Path=Extensions\PrintRequest.bonsai, PrintCode=outcome, PrintSubjectName=PrintCode)
    -> SelectMany Penalty
        SubscribeSubject Penalty
        -> Bonsai.Scripting.Expressions.ExpressionTransform FromSecondsToTimeSpan
          Expression: TimeSpan.FromSeconds(it)
        -> PropertyMapping(DueTime)
        -> Timer(DueTime=PT1S, Period=PT0S)
        -> Take(Count=1)
        -> WorkflowOutput

        WorkflowInput Source1
        -> IncludeWorkflow(Path=Extensions\PrintRequest.bonsai, PrintCode=penalty_time, PrintSubjectName=PrintCode)
    -> IncludeWorkflow(Path=Extensions\TimestampEvent.bonsai, TimestampSubject=Timestamp)
    -> IntProperty(Value=0)
    -> Take(Count=1)
    -> WorkflowOutput
#17, #20 -> Merge
-> Repeat => #22
GroupWorkflow EndSession
    SubscribeSubject AnimalConfig
    -> MemberSelector(Selector=Session.Duration)
    -> PropertyMapping(DueTime)
    -> Timer(DueTime=PT2H, Period=PT0S)
    -> StringProperty => #4
    SubscribeSubject EndSessionButton => #5
    #4, #5 -> Merge
    -> WorkflowOutput
-> GroupWorkflow CloseHardware => #24
    WorkflowInput Source1
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=Led0))
    -> MulticastSubject BehaviorCommands
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputClearPayload(OutputClear=Led1))
    -> MulticastSubject BehaviorCommands
    -> WorkflowOutput
#22, #24 -> TakeUntil
-> WorkflowOutput
